PsychoPy2experiment version="1.90.3"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  expName = q
  Screen = 1
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Routines
  Routine trial
    KeyboardComponent keyboard
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent code
      Each Frame:
        if len(keyboard.keys) > 0: #make sure not empty, prevent list index error
            currentText = textEntryStim.text
            key = keyboard.keys.pop(-1) # get the last key entered

            if key in backspaceKeys: #allow backspacing
                # set the text to the current text, except the last character
                textEntryStim.text = currentText[:-1]
            elif key in enterKeys: #allows return or other keys to end routine
                continueRoutine = False
            else:
                if key in entryChars:
                    if key in exceptionMap:
                        key = exceptionMap[key]
                    textEntryStim.text = currentText + key
      Begin Routine:
        textEntryStim.text = u""
      End Routine:
        trials.addData("responseText", textEntryStim.text)
        #trials.addData("mouse", mouse.name)
    StaticComponent ISI
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
    TextComponent text_3
      color = $[-2.000,-1.000,-1.000]
      pos = [-0.2, 0]
      text [set every repeat] = str($text)
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    TextComponent textEntryStim
      color = $[-1.000,-1.000,-1.000]
      stopVal [duration (s)] = 3
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine resp
    TextComponent thanksText
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        This is the end of the experiment.

        Thanks!
  Routine ins
    CodeComponent Setup
      Begin Experiment:
        ## Choose desired keymap
        import string

        # Set up the desired key names

        # entryChars holds the keynames that we will accept from
        # the keyboard.
        # Here we're making a list of all lower case letters
        # on an English-US keyboard.
        entryChars = [x for x in string.ascii_letters]
        # could put extra keynames here if desired, use
        # keynameFinder demo to get name of keys
        extraChars = []
        # The exception map is for when the keyname is
        # not what you want to display. i.e. the keyname
        #вставить вырезанные исключения
        exceptionMap = {"space": u" ",
                    u"q": u"й",
                    u"w": u"ц",
                    u"e": u"у",
                    u"r": u"к",
                    u"t": u"е",
                    u"y": u"н",
                    u"u": u"г",
                    u"i": u"ш",
                    u"o": u"щ",
                    u"p": u"з",
                    u"[": u"х",
                    u"]": u"ъ",
                    u"a": u"ф",
                    u"s": u"ы",
                    u"d": u"в",
                    u"f": u"а",
                    u"g": u"п",
                    u"h": u"р",
                    u"j": u"о",
                    u"k": u"л",
                    u"l": u"д",
                    u";": u"ж",
                    u"'": u"э",
                    u"z": u"я",
                    u"x": u"ч",
                    u"c": u"с",
                    u"v": u"м",
                    u"b": u"и",
                    u"n": u"т",
                    u"m": u"ь",
                    u",": u"б",
                    u".": u"ю",
                    u"/": u".",
        }
        # add extra characters into expected
        # key list
        for exChar in extraChars:
            if not exChar in entryChars:
                entryChars.append(exChar)

        #вставить 2 вырезанные исключения
        # same with exception keys
        for exKey in exceptionMap.keys():
            if not exKey in entryChars:
                entryChars.append(exKey)

        enterKeys = ['return', 'num_enter']
        backspaceKeys = ['backspace']
        escapeKey = 'escape'
    TextComponent instText
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        OK. Ready for the real thing?

        (Esc will quit)

        Press any key to continue
    KeyboardComponent ready
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine ins
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = 2nback.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('n', 1), ('text', 2), ('q', 2), ('answer', 2)]),
      OrderedDict([('n', 2), ('text', 3), ('q', 3), ('answer', 3)]),
      OrderedDict([('n', 3), ('text', 2), ('q', 2), ('answer', 2)]),
      OrderedDict([('n', 4), ('text', 2), ('q', 2), ('answer', 2)]),
      OrderedDict([('n', 5), ('text', 3), ('q', 3), ('answer', 3)])]
    Routine trial
  LoopTerminator trials
  Routine resp
