PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  expName = 40pair
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
    TextComponent word
      color = $[-1.000,-1.000,-1.000]
      text [set every repeat] = $text
      stopVal [duration (s)] = 4
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine resp
    TextComponent thanksText
      color = $[-1.000,-1.000,-1.000]
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        This is the end of the experiment.

        Thanks!
  Routine ins
    TextComponent instText
      color = $[-1.000,-1.000,-1.000]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        OK. Ready for the real thing?

        (Esc will quit)

        Press any key to continue
    KeyboardComponent ready
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine ins
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = word.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'q': u'\u043a\u043e\u043c\u0430\u0440 -', 'text': u'\u043a\u043e\u043c\u0430\u0440 - \u043a\u043e\u043b\u0435\u0441\u043e', 'n': 1},
      {'q': u'\u0440\u0430\u0446\u0438\u044f -', 'text': u'\u0440\u0430\u0446\u0438\u044f - \u043e\u0431\u043e\u0438', 'n': 2},
      {'q': u'\u0440\u0443\u0447\u043a\u0430 -', 'text': u'\u0440\u0443\u0447\u043a\u0430 - \u0442\u0435\u0442\u0440\u0430\u0434\u044c', 'n': 3},
      {'q': u'\u0434\u0438\u0432\u0430\u043d -', 'text': u'\u0434\u0438\u0432\u0430\u043d - \u043c\u044f\u0447', 'n': 4},
      {'q': u'\u0437\u0435\u0440\u043a\u0430\u043b\u043e -', 'text': u'\u0437\u0435\u0440\u043a\u0430\u043b\u043e - \u043f\u043e\u043c\u0430\u0434\u0430', 'n': 5},
      {'q': u'\u0441\u0442\u0443\u043f\u0435\u043d\u044c\u043a\u0430 -', 'text': u'\u0441\u0442\u0443\u043f\u0435\u043d\u044c\u043a\u0430 - \u0431\u043e\u0447\u043a\u0430', 'n': 6},
      {'q': u'\u043c\u0435\u0442\u0440\u043e -', 'text': u'\u043c\u0435\u0442\u0440\u043e - \u0444\u043e\u043d\u0430\u0440\u044c', 'n': 7},
      {'q': u'\u043c\u043e\u043b\u043e\u0442\u043e\u043a -', 'text': u'\u043c\u043e\u043b\u043e\u0442\u043e\u043a - \u0442\u0430\u0431\u043b\u0435\u0442\u043a\u0430', 'n': 8},
      {'q': u'\u043f\u0443\u0433\u043e\u0432\u0438\u0446\u0430 -', 'text': u'\u043f\u0443\u0433\u043e\u0432\u0438\u0446\u0430 - \u0448\u0430\u043f\u043a\u0430', 'n': 9},
      {'q': u'\u0433\u0432\u043e\u0437\u0434\u044c -', 'text': u'\u0433\u0432\u043e\u0437\u0434\u044c - \u043b\u0430\u043c\u043f\u043e\u0447\u043a\u0430', 'n': 10}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
    Routine trial
  LoopTerminator trials
  Routine resp
