PsychoPy2experiment version="1.90.3"
Settings
  Monitor = testMonitor
  color = black
  Experiment info = {u'session': u'01', u'participant': u''}
  Units = norm
  Save excel file = True
  Window size (pixels) = [2560, 1440]
  Full-screen window = True
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  expName = Nback
  logging level = warning
  Screen = 1
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Routines
  Routine trial
    TextComponent word
      color [set every repeat] = $[-1.000,-1.000,1.000]
      text [set every repeat] = str($text)
      stopVal [duration (s)] = 2.5
      startVal [time (s)] = 0
      letterHeight = 2
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    KeyboardComponent resp
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 3
      forceEndRoutine = False
      allowedKeys = "None","down","right"
      startVal [time (s)] = 0
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  Routine instruct
    TextComponent instrText
      color = $[1, 1, 1]
      text = Press "Down" for correct answer
      startVal [time (s)] = 0
      letterHeight = 0.1
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    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      text = This is the end of the experiment. Thanks!
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      font = arial
      letterHeight = 0.1
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Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = 2Nb-stimuls-30.xlsx
    loopType = sequential
    nReps = 1
    endPoints = [1, 2]
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    conditions:
      [OrderedDict([('text', 7), ('corrAns', u'None')]),
      OrderedDict([('text', 9), ('corrAns', u'None')]),
      OrderedDict([('text', 9), ('corrAns', u'None')]),
      OrderedDict([('text', 9), ('corrAns', u'down')]),
      OrderedDict([('text', 6), ('corrAns', u'None')]),
      OrderedDict([('text', 9), ('corrAns', u'down')]),
      OrderedDict([('text', 8), ('corrAns', u'None')]),
      OrderedDict([('text', 8), ('corrAns', u'None')]),
      OrderedDict([('text', 6), ('corrAns', u'None')]),
      OrderedDict([('text', 8), ('corrAns', u'down')]),
      OrderedDict([('text', 2), ('corrAns', u'None')]),
      OrderedDict([('text', 9), ('corrAns', u'None')]),
      OrderedDict([('text', 1), ('corrAns', u'None')]),
      OrderedDict([('text', 4), ('corrAns', u'None')]),
      OrderedDict([('text', 9), ('corrAns', u'None')]),
      OrderedDict([('text', 4), ('corrAns', u'down')]),
      OrderedDict([('text', 4), ('corrAns', u'None')]),
      OrderedDict([('text', 1), ('corrAns', u'None')]),
      OrderedDict([('text', 2), ('corrAns', u'None')]),
      OrderedDict([('text', 1), ('corrAns', u'down')]),
      OrderedDict([('text', 6), ('corrAns', u'None')]),
      OrderedDict([('text', 5), ('corrAns', u'None')]),
      OrderedDict([('text', 9), ('corrAns', u'None')]),
      OrderedDict([('text', 7), ('corrAns', u'None')]),
      OrderedDict([('text', 4), ('corrAns', u'None')]),
      OrderedDict([('text', 1), ('corrAns', u'None')]),
      OrderedDict([('text', 9), ('corrAns', u'None')]),
      OrderedDict([('text', 1), ('corrAns', u'down')]),
      OrderedDict([('text', 8), ('corrAns', u'None')]),
      OrderedDict([('text', 8), ('corrAns', u'None')])]
    Routine trial
  LoopTerminator trials
  Routine thanks
