PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  expName = q
  Screen = 1
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Routines
  Routine trial
    KeyboardComponent keyboard
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent code
      Begin Routine:
        textEntryStim.text = u""
      End Routine:
        trials.addData("responseText", textEntryStim.text)
      Each Frame:
        if len(keyboard.keys) > 0: #make sure not empty, prevent list index error
            currentText = textEntryStim.text
            key = keyboard.keys.pop(-1) # get the last key entered

            if key in backspaceKeys: #allow backspacing
                # set the text to the current text, except the last character
                textEntryStim.text = currentText[:-1]
            elif key in enterKeys: #allows return or other keys to end routine
                continueRoutine = False
            else:
                if key in entryChars:
                    if key in exceptionMap:
                        key = exceptionMap[key]
                    textEntryStim.text = currentText + key
    StaticComponent ISI
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
    TextComponent text_3
      color = $[-1.000,-1.000,-1.000]
      text [set every repeat] = $text
      pos = [-0.2, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    TextComponent textEntryStim
      color = $[-1.000,-1.000,-1.000]
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine resp
    TextComponent thanksText
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        This is the end of the experiment.

        Thanks!
  Routine ins
    CodeComponent Setup
      Begin Experiment:
        ## Choose desired keymap
        import string

        # Set up the desired key names

        # entryChars holds the keynames that we will accept from
        # the keyboard.
        # Here we're making a list of all lower case letters
        # on an English-US keyboard.
        entryChars = [x for x in string.ascii_letters]
        # could put extra keynames here if desired, use
        # keynameFinder demo to get name of keys
        extraChars = []
        # The exception map is for when the keyname is
        # not what you want to display. i.e. the keyname
        exceptionMap = {"space": u" ",
                    u"q": u"й",
                    u"w": u"ц",
                    u"e": u"у",
                    u"r": u"к",
                    u"t": u"е",
                    u"y": u"н",
                    u"u": u"г",
                    u"i": u"ш",
                    u"o": u"щ",
                    u"p": u"з",
                    u"[": u"х",
                    u"]": u"ъ",
                    u"a": u"ф",
                    u"s": u"ы",
                    u"d": u"в",
                    u"f": u"а",
                    u"g": u"п",
                    u"h": u"р",
                    u"j": u"о",
                    u"k": u"л",
                    u"l": u"д",
                    u";": u"ж",
                    u"'": u"э",
                    u"z": u"я",
                    u"x": u"ч",
                    u"c": u"с",
                    u"v": u"м",
                    u"b": u"и",
                    u"n": u"т",
                    u"m": u"ь",
                    u",": u"б",
                    u".": u"ю",
                    u"/": u".",
        }

        # add extra characters into expected
        # key list
        for exChar in extraChars:
            if not exChar in entryChars:
                entryChars.append(exChar)

        # same with exception keys
        for exKey in exceptionMap.keys():
            if not exKey in entryChars:
                entryChars.append(exKey)

        enterKeys = ['return', 'num_enter']
        backspaceKeys = ['backspace']
        escapeKey = 'escape'
    TextComponent instText
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        OK. Ready for the real thing?

        (Esc will quit)

        Press any key to continue
    KeyboardComponent ready
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine ins
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = q1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'text': u'\u043a\u043e\u043c\u0430\u0440 -', 'congruent': None, 'corrAns': None, 'letterColor': None},
      {'text': u'\u0440\u0430\u0434\u0438\u043e -', 'congruent': None, 'corrAns': None, 'letterColor': None},
      {'text': u'\u0440\u0443\u0447\u043a\u0430 -', 'congruent': None, 'corrAns': None, 'letterColor': None},
      {'text': u'\u0434\u0438\u0432\u0430\u043d -', 'congruent': None, 'corrAns': None, 'letterColor': None},
      {'text': u'\u0437\u0435\u0440\u043a\u0430\u043b\u043e -', 'congruent': None, 'corrAns': None, 'letterColor': None}]
    Routine trial
  LoopTerminator trials
  Routine resp
